// protocol LessonExercise_SplitSample performs something.
protocol LessonExercise_SplitSample

// Place golang packages to import here
import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
)

// Parameters to this protocol
Parameters (
	VolumeA Volume
	VolumeB Volume
	Platetype string
	WellA string
	WellB string
	PlateNameA string
	PlateNameB string
)

// Output data of this protocol
Data ()

// Physical inputs to this protocol
Inputs (
	InputSolution *LHComponent
)

// Physical outputs to this protocol
Outputs (
	ComponentA *LHComponent
	ComponentB *LHComponent
)

// Conditions to run on startup
Setup {

}

// The core process for this protocol. These steps are executed for each input.
Steps {
	sampleA := mixer.Sample(InputSolution, VolumeA)
	sampleB := mixer.Sample(InputSolution, VolumeB)
	ComponentA = MixNamed(Platetype, WellA, PlateNameA, sampleA)
	ComponentB = MixNamed(Platetype, WellB, PlateNameB, sampleB)
}

// Run after controls and a steps block are completed to post process any data
// and provide downstream results
Analysis {

}

// A block of tests to perform to validate that the sample was processed
// correctly. Optionally, destructive tests can be performed to validate
// results on a dipstick basis
Validation {

}
