// example protocol Lessonshowing The MixTo command which allows a specifc plate type to be specified. i.e. platetype pcrplate_skirted
protocol Lesson2A_Aliquot

import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
)

// Input parameters for this protocol (data)
Parameters {
	SolutionVolume   Volume
	VolumePerAliquot Volume
	NumberofAliquots int
}

// Data which is returned from this protocol, and data types
Data{}

// Physical Inputs to this protocol with types
Inputs {
	Solution *LHComponent
	OutPlate *LHPlate
}

// Physical outputs from this protocol with types
Outputs {
	Aliquots []*LHComponent
}

Requirements {

}

// Conditions to run on startup
Setup {

}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	number := SolutionVolume.SIValue() / VolumePerAliquot.SIValue()
	possiblenumberofAliquots, _ := wutil.RoundDown(number)
	if possiblenumberofAliquots < NumberofAliquots {
		Errorf("Not enough solution for this many aliquots")
	}

	var aliquots []*LHComponent

	for i := 0; i < NumberofAliquots; i++ {
		if Solution.TypeName() == "dna" {
			Solution.Type = wtype.LTDoNotMix
		}
		aliquotSample := mixer.Sample(Solution, VolumePerAliquot)
		// the MixTo command is used instead of Mix to specify the plate type (e.g. "greiner384" or "pcrplate_skirted")
		// the four input fields to the MixNamed command represent
		// 1. the platetype as a string: commonly the input to the antha element will actually be an LHPlate rather than a string so the type field can be accessed with OutPlate.Type
		// 2. well location as a  string e.g. "A1" (in this case leaving it blank "" will leave the well location up to the scheduler),
		// 3. the plate name,
		// 4. the sample or array of samples to be mixed; in the case of an array you'd normally feed this in as samples...
		aliquot := MixNamed(OutPlate.Type, "", "AliquotPlate", aliquotSample)
		aliquots = append(aliquots, aliquot)
	}
	Aliquots = aliquots
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed
//correctly. Optionally, destructive tests can be performed to validate
//results on a dipstick basis
Validation {

}
