// protocol Lessonfor creating a DNASequence from a sequence file format. // Supported formats: .gdx .fasta .gb
protocol Lesson6_NewDNASequence_fromfile

import (
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/parse"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
)

// Input parameters for this protocol
Parameters {
	SequenceFile   File
	Gene_name      string
	Plasmid        bool
	Linear         bool
	SingleStranded bool
}

// Data which is returned from this protocol
Data {
	DNA      DNASequence
	Status   string
	Warnings error
}

// Physical inputs to this protocol
Inputs{}

// Physical outputs from this protocol
Outputs{}

Requirements {

}

// Actions to perform before protocol Lessonitself
Setup {

}

// Core process of the protocol: steps to be performed for each input
Steps {

	seqs, err := parse.DNAFileToDNASequence(SequenceFile)
	if err != nil {
		Errorf(err.Error())
	}
	if len(seqs) == 1 && err == nil {

		DNA = seqs[0]

		DNA.Nm = Gene_name
		DNA.Plasmid = Plasmid

	}

	orfs := sequences.FindallORFs(DNA.Seq)

	if len(DNA.Features) == 0 {
		features := sequences.ORFs2Features(orfs)

		DNA = wtype.Annotate(DNA, features)
	}

	Status = fmt.Sprintln(
		text.Sprint("DNA_Seq: ", DNA),
		text.Sprint("ORFs: ", orfs),
	)

	Warnings = err

}

// Actions to perform after steps block to analyze data
Analysis {

}

Validation {

}
